input = getDirectory("Choose input directory"); 
output = getDirectory("Choose output directory");
//input="F:/Paula/input/"
//output="F:/Paula/output/"
filelist = getFileList(input);
string="waitingforuser";
run("Set Measurements...", "area integrated redirect=None decimal=3");
run("Clear Results");	
for (sequence=0; sequence< filelist.length; sequence++) {
	
	run("Bio-Formats Importer", "open=[" + input + filelist[sequence] + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_1"); 
	run("Make Composite", "display=Composite");
	title=getTitle();  
	
	Stack.setChannel(4);
	run("Duplicate...", "  channels=4");
	run("8-bit");
	
	setAutoThreshold("Default dark no-reset");
	waitForUser(string);
	setOption("BlackBackground", true);
	run("Convert to Mask");
	run("Analyze Particles...", "include add");
	close();
	
	Stack.setChannel(3);
	roiManager("Combine");
	run("Measure");
	Stack.setChannel(4);
	run("Measure");
	
	areas=Table.getColumn("Area");
	intdens=Table.getColumn("IntDen");
	//print(title+" | Area: "+ areas[0]);
	print(title+" | Blue: "+ intdens[0]);
	print(title+" | Yellow: "+ intdens[1]);
	
	run("Clear Results");	
    run("Close All");
    roiManager("reset");
	}
